<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="jp.riken" Category="ardea"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareService</Identifier>
  <DisplayName>Labware Service</DisplayName>
  <Description>
    Ardea labware handling: pick and put a labware by orchestrating the DENSO robot
    (b-CAP tasks) and the KEYENCE hand (KV COM+). Each command runs the approach
    task, actuates the hand (close for pick, open for put), runs the retract task,
    and confirms the robot returned to the retract pose. PickLabware requires the
    robot to start at the base pose; PutLabware requires the retract pose. Neither
    command moves the carriage.
  </Description>

  <!-- Commands -->
  <Command>
    <Identifier>PickLabware</Identifier>
    <DisplayName>Pick Labware</DisplayName>
    <Description>
      Pick a labware: verify the robot is at the base pose, run the pick-approach
      task, close the hand, run the pick-retract task (which returns the robot to
      the retract pose), and confirm the retract pose. Intermediate responses report
      the current phase.
    </Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the robot ended at the retract pose after the pick.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the pick sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtBasePose</Identifier>
      <Identifier>CarriageNotAtOrigin</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>PutLabware</Identifier>
    <DisplayName>Put Labware</DisplayName>
    <Description>
      Place a labware: verify the robot is at the retract pose (not the base pose)
      and the carriage is at the origin, run the approach task, open the hand, run
      the retract task (robot to the retract pose), confirm the retract pose, then —
      with the hand open — run the common return-home task to bring the robot back
      to the base pose and confirm it. Intermediate responses report the current phase.
    </Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtBasePose</Identifier>
      <DisplayName>At Base Pose</DisplayName>
      <Description>True if the robot ended at the base pose after the put and return-home.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the put sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtRetractPose</Identifier>
      <Identifier>CarriageNotAtOrigin</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <!-- Command execution errors -->
  <DefinedExecutionError>
    <Identifier>RobotNotAtRetractPose</Identifier>
    <DisplayName>Robot Not At Retract Pose</DisplayName>
    <Description>The robot is not at the retract pose, which PutLabware requires (the base pose is not allowed).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotNotAtBasePose</Identifier>
    <DisplayName>Robot Not At Base Pose</DisplayName>
    <Description>The robot is not at the base pose, which PickLabware requires (the retract pose is not allowed).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>CarriageNotAtOrigin</Identifier>
    <DisplayName>Carriage Not At Origin</DisplayName>
    <Description>The travel carriage is not at 0 mm; PickLabware requires the carriage at the origin.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandNotOpen</Identifier>
    <DisplayName>Hand Not Open</DisplayName>
    <Description>The hand is not fully open; PickLabware requires the hand open before starting.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PoseNotRestored</Identifier>
    <DisplayName>Pose Not Restored</DisplayName>
    <Description>The robot did not return to the retract pose after the pick-retract task.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>ControllerConnectionError</Identifier>
    <DisplayName>Controller Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the robot controller over b-CAP.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotAccessError</Identifier>
    <DisplayName>Robot Access Error</DisplayName>
    <Description>Failed to acquire the robot or read the current joint angles.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskExecutionTimeout</Identifier>
    <DisplayName>Task Execution Timeout</DisplayName>
    <Description>A DENSO task (PAC program) did not start or finish within the configured timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskAccessError</Identifier>
    <DisplayName>Task Access Error</DisplayName>
    <Description>A DENSO task failed to run or stopped abnormally.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcConnectionError</Identifier>
    <DisplayName>PLC Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the PLC over KV COM+.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcAccessError</Identifier>
    <DisplayName>PLC Access Error</DisplayName>
    <Description>Failed to read or write a PLC device.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandError</Identifier>
    <DisplayName>Hand Error</DisplayName>
    <Description>The hand failed to activate or to complete a chuck/unchuck within the timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>GraspFailed</Identifier>
    <DisplayName>Grasp Failed</DisplayName>
    <Description>Grasp verification failed: PickLabware did not grasp a labware (hand closed fully = empty), or PutLabware was not holding a labware to place.</Description>
  </DefinedExecutionError>
</Feature>
